macro "GALT [a]" {

	// append function
	function append(arr, value) {
     		arr2 = newArray(arr.length+1);
     		for (i=0; i<arr.length; i++) {
       			arr2[i] = arr[i];
		}
     		arr2[arr.length] = value;
     		return arr2;
 	}

	// find line function
	// needs start params and direction
	function findLine(x0, y0, x1, y1, searchPixels) {

		// starting guess parameters for line finding
		var lineTop = y0;
		var lineBottom = y1;
		var lineLeft = x0;
		var lineRight = x1;

		var pixels = searchPixels; // number of pixels between centers is about 14

		// direction of movement should be perpendicular to line
		if ( y0 == y1 ) {
			xshift = 0;
			yshift = 1;
		} else {
			xshift = 1;
			yshift = 0;
		}

		// find nearby line with brighest pixel
		var bestCentered = 0;
		var bestJ = 0;
		for (j=0; j<pixels; j++) {
			makeLine(lineLeft+j*xshift, lineBottom+j*yshift, lineRight+j*xshift, lineTop+j*yshift);
			//waitForUser;
			vals = getProfile();
			Array.getStatistics(vals, min, max, mean, stdDev);
			howCentered = mean;
			//print(howCentered);
			if (howCentered > bestCentered) {
				bestJ = j;
				bestCentered = howCentered;
			}
		}

		//print(bestJ);
		makeLine(lineLeft+bestJ*xshift, lineBottom+bestJ*yshift, lineRight+bestJ*xshift, lineTop+bestJ*yshift);
		//waitForUser;
		vals = getProfile();

		return vals;
	}

	// find sets of peaks function
	// needs array of values from profile, stdDev background, mean background value, expected number of peaks per set, expected number of sets?
	function findPeakSets(vals, stDevBG, meanBG, expectedPeaks, minPixBtwSets, maxIndexRange) {
		res = newArray;
		var tol = 3*stdDevBG;
		var threshold = meanBG+5*stdDevBG;
		//print(threshold);
		maxima = Array.findMaxima(vals, tol);
		Array.sort(maxima);
		//Array.print(maxima);

		for (i=0; i<maxima.length-expectedPeaks+1; i++) {
			set = Array.slice(maxima, i, i+expectedPeaks);
			if ( amplitudeCheck(vals, set, threshold) && indexRangeCheck(set, maxIndexRange) ) {
				lastStats = getStatsFromIndices(vals, set);
				lastStdDev = lastStats[3];
				for (j=i+1; j<maxima.length-expectedPeaks+1; j++) {
					testSet = Array.slice(maxima, j, j+expectedPeaks);
					thisStats = getStatsFromIndices(vals, testSet);
					thisStdDev = thisStats[3];
					if (thisStdDev < lastStdDev) {
						lastStdDev = thisStdDev;
						set = testSet;
					} else {
						//Array.print(set);
						for (k=0; k<set.length; k++) {
							res = append(res, set[k]);
						}
						i = j+expectedPeaks-2;
						tooClose = true;
						while(tooClose) {
							//print(i);
							//print(maxima[i+1]);
							//print(set[set.length-1]);
							tooClose = maxima[i+1] - set[set.length-1] < minPixBtwSets;
							if (tooClose) {
								i++;
							}
							if (i >= maxima.length-expectedPeaks+1) {
								break;
							}
							//print(i);
						}
						//print(i);
						break;
					}
				}
			}
		}
		return res;
	}

	function indexRangeCheck(indices, maxRange) {
		Array.getStatistics(indices, min, max, mean, stdDev);
		return (maxRange > (max-min));
	}

	// amplitude check helper function for find peak sets function
	function amplitudeCheck(vals, indices, threshold) {
		res = true;
		for (i=0; i<indices.length; i++) {
			if ( vals[indices[i]] < threshold ) {
				res = false;
			}
		}
		return res;
	}

	// get stats from indices helper function, used in several places
	function getStatsFromIndices(vals, indices) {
		setValues = newArray;
		for (i=0; i<indices.length; i++) {
			setValues = append(setValues, vals[indices[i]]);
		}
		Array.getStatistics(setValues, min, max, mean, stdDev);
		res = newArray(min, max, mean, stdDev);
		return res;
	}

	// get directory from user
	var dir = getString("This macro takes a file path which is the target directory. It loops through the files in this target directory to perform analysis. Please enter the target directory file path.", "C:/Gener8/GLT/GALT FL Images/2x6");
	if ( !endsWith(dir, "/") ) {
		dir = dir + "/";
	}

	// user selects image type from available options, all images in target directory have to be same style
	Dialog.create("Select Image Type");
	items = newArray("9 sets of 3", "9 sets of 1", "2 columns of 6");
	Dialog.addRadioButtonGroup("Options", items, 3, 1, items[2]);
	Dialog.show;
	imageType = Dialog.getRadioButton();

	// set params based on user image type choice
	if ( imageType == "2 columns of 6") {
			var numLines = 2; // integer value equal to the number of lines that will be drawn for profiles
			lineNames = newArray("Assays", "Known Concentration"); // array of names for these lines for table creation
			linePoints = newArray(1980, 700, 1980, 2300, 2400, 700, 2400, 2300); // array of sets of 4 points for drawing the lines
			backgroundPoints = newArray(1300, 300); // array with sets of start points and lengths of areas to measure background information
			peakNames = newArray("Set 1", "Set 2", "Set 3", "Set 4", "Set 5", "Set 6"); // array with the names of each set in the line
			var expectedPeaks = 5; // expected number of wells in a row with fluorescence
			var minPixBtwSets = 40; // minimum number of pixels expected to be seen between any two sets
			var searchPixels = 20; // number of pixels to search through for line finding
			var maxIndexRange = 120; // number of pixels that the set of peaks should range at maximum
	} else if ( imageType == "9 sets of 3" ) {
			var numLines = 3;
			lineNames = newArray("Left", "Center", "Right");
			linePoints = newArray(508, 500, 508, 2700, 2123, 500, 2123, 2700, 3820, 500, 3820, 2700);
			backgroundPoints = newArray(1400, 150);
			peakNames = newArray("Bottom 1u", "Bottom 5u", "Bottom 10u", "Middle 1u", "Middle 5u", "Middle 10u", "Top 1u", "Top 5u", "Top 10u");
			var expectedPeaks = 5;
			var minPixBtwSets = 30;
			var searchPixels = 300;
			var maxIndexRange = 120;
	} else if ( imageType == "9 sets of 1" ) {
			var numLines = 3;
			lineNames = newArray("Left", "Center", "Right");
			linePoints = newArray(610, 500, 610, 2700, 2285, 500, 2285, 2700, 3644, 500, 3644, 2700);
			backgroundPoints = newArray(400, 400);
			peakNames = newArray("Bottom 1u", "Bottom 5u", "Bottom 10u", "Middle 1u", "Middle 5u", "Middle 10u", "Top 1u", "Top 5u", "Top 10u");
			var expectedPeaks = 3;
			var minPixBtwSets = 500;
			var searchPixels = 300;
			var maxIndexRange = 100;
	} else {
			var numLines = 2;
			lineNames = newArray("Assays", "Known Concentration");
			linePoints = newArray(2054, 700, 2054, 2300, 2487, 700, 2487, 2300);
			backgroundPoints = newArray(1300, 300);
			peakNames = newArray("Set 1", "Set 2", "Set 3", "Set 4", "Set 5", "Set 6");
			var expectedPeaks = 5;
			var minPixBtwSets = 40;
			var searchPixels = 20;
			var maxIndexRange = 120;
	}

	// create table to store data
	//Table.create("Fluorescence");

	// check if the entered path is a directory before entering main loop
	if (File.isDirectory(dir)) {

		files = getFileList(dir); // get array of files

		// loop through files
		for (i=0; i<files.length; i++) {

			// open file
			var filename = files[i];
			var pth = dir + filename;
			var currIndex = indexOf(filename, "A")-1;
			var current = substring(filename, currIndex, currIndex+1);
			var lensIndex = indexOf(filename, "mm")-2;
			var lens = substring(filename, lensIndex, lensIndex+2);
			var expIndex = indexOf(filename, "sec")-1;
			var exposure = substring(filename, expIndex, expIndex+1);

			// loop through lines
			for (line=0; line<numLines; line++) {
				open(pth); // open the image so it is active
				// create entry in table
				var entryLine = i*numLines + line;
				Table.set("File Name", entryLine, filename);
				Table.set("LED Current", entryLine, current);
				Table.set("Lens Focal Length (mm)", entryLine, lens);
				Table.set("Exposure Time (sec)", entryLine, exposure);
				Table.set("Line", entryLine, lineNames[line]);

				// find line and get statistics
				vals = findLine(linePoints[line*4], linePoints[line*4+1], linePoints[line*4+2], linePoints[line*4+3], searchPixels);
				Array.getStatistics(vals, min, max, mean, stdDev);

				// show line profile
				//Plot.create("Profile " + filename + lineNames[line], "Row", "Intensity", vals);
				//Plot.show();

				// characterize background and noise
				var length = vals.length;
				background = Array.slice(vals, backgroundPoints[0], backgroundPoints[0]+backgroundPoints[1]); // probably want this to be different depending on which image we are looking at
				Array.getStatistics(background, minBG, maxBG, meanBG, stdDevBG);
				Table.set("Mean Background", entryLine, meanBG);
				Table.set("Background Standard Deviation", entryLine, stdDevBG);

				// find peak sets
				sets = findPeakSets(vals, stdDevBG, meanBG, expectedPeaks, minPixBtwSets, maxIndexRange);
				Table.set("Sets Found", entryLine, sets.length/expectedPeaks);

				// characterize sets
				for (j=0; j<sets.length/expectedPeaks; j++) {
					var start = j*expectedPeaks;
					var end = start + expectedPeaks;
					indices = Array.slice(sets, start, end);
					Array.getStatistics(indices, indexMin, indexMax, indexMean, indexStdDev);
					setStats = getStatsFromIndices(vals, indices);
					var setMin = setStats[0];
					var setMax = setStats[1];
					var setMean = setStats[2];
					var setStdDev = setStats[3];
					if (j > peakNames.length-1) {
						peakName = "Set " + j+1;
					} else {
						peakName = peakNames[j];
					}
					//Table.set("Max Index " + peakName, entryLine, indexMax);
					//Table.set("Min Index " + peakName, entryLine, indexMin);
					Table.set("Mean Signal " + peakName, entryLine, setMean-meanBG);
					//Table.set("Set " + j + " Min", i, setMin);
					//Table.set("Set " + j + " Max", i, setMax);
				}

				// let user look before closing
				//Dialog.create("Continue?");
				//Dialog.show();
				//waitForUser;
				close(filename);
			}

		}
		Table.update;
	} else {
		waitForUser("Error: Not a valid directory entry.", "It appears the file path you've entered is not recognized as a directory. Please check your file path and run this macro again.");
	}
}
